PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s' %(expInfo['participant'], expName)
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = IAT_and_likerts
  logging level = data
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent stimulusImage
      startVal [time (s)] = 0.3
      image [set every repeat] = $imageStimulus
      size = .6
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    TextComponent stimulusBox
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponse
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponse
      correctAns = $feedbackResponse
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code
      Begin Experiment:
        msg1=""

        # dertermine the condition based on the modulo of the participant code
        # i.e., if the remained of the participant code divided by 4 = 1, run condition 1, etc.
        participant = int(expInfo['participant'])
        if (participant % 4) == 1:
            taskFile = "blockOrderA_flowers.xlsx"
            likertFile = "likert_flowers.xlsx"
        elif (participant % 4) == 2:
            taskFile = "blockOrderB_flowers.xlsx"
            likertFile = "likert_flowers.xlsx"
        elif (participant % 4) == 3:
            taskFile = "blockOrderA_insects.xlsx"
            likertFile = "likert_insects.xlsx"
        elif (participant % 4) == 0:
            taskFile = "blockOrderB_insects.xlsx"
            likertFile = "likert_insects.xlsx"
        else:
            print "****condition file error****"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box
      color [set every repeat] = $[-1, 1, -1]
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent target2box
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine likertScales
    RatingScaleComponent rating
      labels = Not at all, Very much
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.5
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
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    TextComponent instructionBox
      color = yellow
      text [set every repeat] = $instruction
      pos = [0, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.05
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    ImageComponent image
      startVal [time (s)] = 0.5
      image [set every repeat] = $exemplar
      size = .6
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  Routine instructions
    TextComponent instructionsBox
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 0.3
      letterHeight = 0.05
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    KeyboardComponent responseContinue
      correctAns = $requiredResponse
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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    TextComponent target1box_inst
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box_inst
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box_inst
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute1
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box_inst
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox_inst
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox_inst
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator likertPre loopType="TrialHandler"
    conditionsFile = $likertFile
    loopType = sequential
    nReps = 1
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    Routine likertScales
  LoopTerminator likertPre
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $taskFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = $nBlockRepeats
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  LoopInitiator likertPost loopType="TrialHandler"
    conditionsFile = $likertFile
    loopType = sequential
    nReps = 1
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    Routine likertScales
  LoopTerminator likertPost
