PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s' %(expInfo['participant'], expName)
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = SCIAT IAT and likerts
  logging level = warning
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    ImageComponent stimulusImage
      startVal [time (s)] = 0.3
      image [set every repeat] = $imageStimulus
      size = .4
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    TextComponent stimulusBox
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponse
      correctAns = $requiredKey
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponse
      correctAns = $feedbackKey
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code
      Begin Experiment:
        msg1=""

        # dertermine the condition based on the modulo of the participant code
        # i.e., if the remained of the participant code divided by 4 = 1, run condition 1, etc.
        participant = int(expInfo['participant'])
        if (participant % 4) == 1:
            SCIATtaskFile = "blocks_SCIAT_Afirst.xlsx"
            IATtaskFile = "blocks_IAT_flowers_Afirst.xlsx"
        elif (participant % 4) == 2:
            SCIATtaskFile = "blocks_SCIAT_Bfirst.xlsx"
            IATtaskFile = "blocks_IAT_flowers_Bfirst.xlsx"
        elif (participant % 4) == 3:
            SCIATtaskFile = "blocks_SCIAT_Afirst.xlsx"
            IATtaskFile = "blocks_IAT_insects_Afirst.xlsx"
        elif (participant % 4) == 0:
            SCIATtaskFile = "blocks_SCIAT_Bfirst.xlsx"
            IATtaskFile = "blocks_IAT_insects_Bfirst.xlsx"
        else:
            print "****condition file error****"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box
      color [set every repeat] = $colourA
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box
      color [set every repeat] = $colourA
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box
      color [set every repeat] = $colourB
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent attribute2box
      color [set every repeat] = $colourB
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusLeft
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusRight
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent text
      text = End of experiment
      stopVal [duration (s)] = 2
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine recognitionScales
    RatingScaleComponent recognition
      labels = Nee, Ja
      pos = 0, -0.4
      high = 1
      marker = circle
      startVal [time (s)] = 0.5
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 0
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    TextComponent instructionBox_2
      wrapWidth = 1.5
      text = Kent u de betekenis van een of meer van deze Chinese symbolen?
      pos = [0, 0.75]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    ImageComponent allChineseCharactersImage
      startVal [time (s)] = 0.5
      image = allChineseCharacters.png
      size = [1.3, .4]
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  Routine likertScales
    RatingScaleComponent rating
      labels = helemaal niet aangenaam, heel aangenaam
      pos = 0, -0.4
      high = 7
      marker = circle
      startVal [time (s)] = 0.5
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
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    TextComponent instructionBox
      text [set every repeat] = $instruction
      pos = [0, 0.75]
      startVal [time (s)] = 0
      letterHeight = 0.05
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    ImageComponent image
      startVal [time (s)] = 0.5
      image [set every repeat] = $exemplar
      size = .4
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  Routine instructions
    TextComponent instructionsBox
      color [set every repeat] = $colourA
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    KeyboardComponent responseContinue
      correctAns = $requiredResponse
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1.5
      store = nothing
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    TextComponent target1box_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent target2box_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent attribute1box_inst
      color [set every repeat] = $colourB
      text [set every repeat] = $attribute1
      pos = [-.6, 0.55]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent attribute2box_inst
      color [set every repeat] = $colourB
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent orLeftBox_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusLeft
      pos = [-.6, .7]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent orRightBox_inst
      color [set every repeat] = $colourA
      text [set every repeat] = $orStimulusRight
      pos = [.6, .7]
      startVal [time (s)] = 1
      letterHeight = 0.1
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Flow
  Routine recognitionScales
  LoopInitiator SCIAT1blocks loopType="TrialHandler"
    conditionsFile = $SCIATtaskFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator SCIAT1trials loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = $nBlockRepeats
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      Routine trial
    LoopTerminator SCIAT1trials
  LoopTerminator SCIAT1blocks
  LoopInitiator likertPre loopType="TrialHandler"
    conditionsFile = trials_likerts_chinese.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic1.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic2.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic3.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic4.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic5.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower1.jpg'}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
    Routine likertScales
  LoopTerminator likertPre
  LoopInitiator IATblocks loopType="TrialHandler"
    conditionsFile = $IATtaskFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator IATtrials loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = $nBlockRepeats
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      Routine trial
    LoopTerminator IATtrials
  LoopTerminator IATblocks
  LoopInitiator likertPost loopType="TrialHandler"
    conditionsFile = trials_likerts_chinese.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic1.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic2.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic3.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic4.jpg'},
      {u'subscale': 2, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = niet aangenaam\n4 = onverschillig\n5 = aangenaam\n6 = eerder aangenaam\n7 = heel aangenaam', u'exemplar': u'pic5.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower1.jpg'}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
    Routine likertScales
  LoopTerminator likertPost
  LoopInitiator SCIAT2blocks loopType="TrialHandler"
    conditionsFile = $SCIATtaskFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator SCIAT2trials loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = $nBlockRepeats
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      Routine trial
    LoopTerminator SCIAT2trials
  LoopTerminator SCIAT2blocks
  LoopInitiator likertValence loopType="TrialHandler"
    conditionsFile = trials_likerts_flowers&insects.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower1.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower2.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower3.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower4.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'flower5.jpg'},
      {u'subscale': 1, u'instruction': u'Hoe aangenaam vind je de volgende?\n1 = helemaal niet aangenaam\n2 = eerder niet aangenaam\n3 = onverschillig\n4 = eerder aangenaam\n5 = heel aangenaam', u'exemplar': u'insect1.jpg'}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
    Routine likertScales
  LoopTerminator likertValence
  Routine end
